PsychoPy2experiment version="2026.2.4"
Settings
  Audio lib = ptb
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1000, 600)
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  expName = adaptive_staircase_procedure
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5: #50:50 probability
            direction = -level
            corr_resp = 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns' , corr_resp)
        thisExp.addData('tilt' , direction)
        thisExp.addData('key_resp.corr' , key_resp.corr)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    GratingComponent grating
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = direction
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="StairHandler"
    N down = 3
    N up = 1
    endPoints = [0,1]
    loopType = staircase
    max value = 10
    min value = 1
    nReps = 100
    start value = 20
    step sizes = [2,1,1,0.5]
    step type = lin
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    Routine trial
  LoopTerminator trials
